PsychoPy2experiment version="3.0.0alpha3"
Settings
  expName = choiceRTT
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  Units = height
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Routines
  Routine main
    ImageComponent pos1
      startVal [time (s)] = 0
      units = height
      pos [set every repeat] = [-.375, 0]
      size = (0.20, 0.20)
      image = plainWhite.png
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    ImageComponent pos2
      startVal [time (s)] = 0
      units = height
      pos [set every repeat] = [-.125, 0]
      size = (0.2, 0.2)
      image = plainWhite.png
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    ImageComponent pos3
      startVal [time (s)] = 0
      units = height
      pos [set every repeat] = [.125, 0]
      size = (0.2, 0.2)
      image = plainWhite.png
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    ImageComponent pos4
      startVal [time (s)] = 0
      units = height
      pos [set every repeat] = [.375, 0]
      size = (0.2, 0.2)
      image = plainWhite.png
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    ImageComponent targImage
      startVal [time (s)] = isi
      units = height
      pos [set every repeat] = [xPos, 0]
      size = (0.2, 0.2)
      image = tarX.png
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    KeyboardComponent response
      startVal [time (s)] = isi
      allowedKeys = 'c','v','b','n'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $corrAns
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    MouseComponent mouseResp
      startVal [time (s)] = isi
      saveMouseState = final
      forceEndRoutineOnPress = valid click
      clickable = targImage
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  Routine instructions
    TextComponent instr
      startVal [time (s)] = 0.0
      units = height
      letterHeight = 0.035
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      text:
        In this task you will push the space bar or click/touch the target whenever you see the target 'X' appear.

        First, we shall have a practice.

        Push space bar or click/touch to begin the practice session.
    KeyboardComponent startInst
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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    MouseComponent startMouse
      startVal [time (s)] = 0.0
      saveMouseState = never
      forceEndRoutineOnPress = any click
      timeRelativeTo = routine
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  Routine startTask
    TextComponent ready
      startVal [time (s)] = 0.0
      units = height
      letterHeight = 0.04
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      text:
        Now we shall begin the actual experiment.

        Ready?

        Push space bar or click/touch to begin.
    KeyboardComponent go
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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    MouseComponent mouseGo
      startVal [time (s)] = 0.0
      saveMouseState = never
      forceEndRoutineOnPress = any click
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  Routine thanks
    TextComponent text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
      letterHeight = 0.05
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      text:
        Thanks you for participanting!

        The experiment is now over.
Flow
  Routine instructions
  LoopInitiator practiceTrials loopType="TrialHandler"
    nReps = 1
    conditionsFile = srttPractice.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('isi', 1), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1), ('xPos', 0.375), ('corrAns', 'n')])]
    Routine main
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator mainTrials loopType="TrialHandler"
    nReps = 1
    conditionsFile = srttConditions.xlsx
    loopType = fullRandom
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    conditions:
      [OrderedDict([('isi', 1.0), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.0), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.0), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.0), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.2222), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.2222), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.2222), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.2222), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.4444), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.4444), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.4444), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.4444), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.6666), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.6666), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.6666), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.6666), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.8888), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.8888), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.8888), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.8888), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 2.111), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 2.111), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 2.111), ('xPos', 0.125), ('corrAns', 'b')])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
    Routine main
  LoopTerminator mainTrials
  Routine thanks
